//Affine Transformation - updated May 2012

// Description: affine, MI, ASGD

//ImageTypes
(FixedInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingInternalImagePixelType "float")
(MovingImageDimension 3)

(UseDirectionCosines "true")

//Components
(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")
(Interpolator "BSplineInterpolator")
//(Metric "AdvancedMattesMutualInformation")
(Metric "AdvancedMattesMutualInformation")
(Optimizer "AdaptiveStochasticGradientDescent")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "AffineTransform")


(ErodeMask "false" )

(NumberOfResolutions 6)

(HowToCombineTransforms "Compose")
(AutomaticTransformInitialization "true")
(AutomaticScalesEstimation "true")
//SHANG, instead of "GeometricalCenter"
//(AutomaticTransformInitializationMethod "CenterOfGravity")    //does affect the printed "scales" (for optimization) even when t0 is supplied
//(Spacing 30.0 30.0 30.0)
//(Spacing 0.01 0.01 0.01)
//(TransformParameters 10 0 0 0 10 0 0 0 10 -236.5 -62 -288)  // no effect here

(WriteTransformParametersEachIteration "false")
(WriteResultImage "true")
(CompressResultImage "false")
(WriteResultImageAfterEachResolution "false") 
(ShowExactMetricValue "false")

//Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 5000 ) 

//Number of grey level bins in each resolution level:
(NumberOfHistogramBins 32 )
(FixedLimitRangeRatio 0.0)
(MovingLimitRangeRatio 0.0)
(FixedKernelBSplineOrder 3)
(MovingKernelBSplineOrder 3)

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "RandomCoordinate")
(FixedImageBSplineInterpolationOrder 3)
(UseRandomSampleRegion "false")
(NumberOfSpatialSamples 2000 )
(NewSamplesEveryIteration "true")
(CheckNumberOfSamples "true")
(MaximumNumberOfSamplingAttempts 10)
//SHANG
//(MaximumNumberOfSamplingAttempts 50)

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 3)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)

//SP: Param_A in each resolution level. a_k = a/(A+k+1)^alpha
(SP_A 20.0 )


